PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = AB_pic
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Routines
  Routine trial
    VariableComponent curOpacity3
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    VariableComponent maskCol
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    VariableComponent curOpacity2
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    VariableComponent curOpacity
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    VariableComponent curImage
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random


        maskCol = [random.random(), random.random(), random.random()]


        folder = 'C:\\Users\\Employee\\Google Drive\\UP\\MyResearch\\TaskProgramming\\AB_pic\\resources\\'
        picFiles = os.listdir(folder)

        picFiles = np.random.choice(picFiles, 40, False)

        curOpacity = 0
        curOpacity2 = 0
        curOpacity3 = 0
      Begin Routine:
        #get the images for the current trial:

        curSet = np.random.choice(picFiles,17, False)
        shuffle(curSet)
        for kk in range(0,17):
            trials.addData('img'+str(kk), curSet[kk])

        ii = 0
        curImage = folder + curSet[ii]
        checkForOff = True
        checkForOn = False
      Each Frame:
        t = trialClock.getTime()
        onSets = np.linspace(stimLen+isi, (stimLen+isi)*15, 15)
        offSets = np.linspace(stimLen, (stimLen+isi)*15 - isi, 15)
        if checkForOff: #there's an image on screen and we need to know to take it off
            if t>offSets[ii]:
                print(str(t) + "offset!")
                curOpacity2 = 1
                maskCol = [random.random(), random.random(), random.random()]
                checkForOff = False
                checkForOn = True
        else: #the mask is up right now, check for new image
            if t>onSets[ii]:
                print(str(t) + "onSet!")
                curOpacity2 = 0
                checkForOff = True
                checkForOn = False
                ii = ii + 1
                if ii==15:
                    continueRoutine = False
                elif ii==T2_loc+3:
                    trials.addData('lastPresent', ii-1)
                    continueRoutine = False
                else:
                    curImage = folder + curSet[ii]
                    if T1_loc-1==ii:
                        curOpacity = 1
                    elif T2_loc-1==ii:
                        curOpacity3 = 1
                    else:
                        curOpacity = 0
                        curOpacity3 = 0
    PolygonComponent polygon
      fillColor = $[1,0,0]
      opacity [set every frame] = $curOpacity
      shape = triangle
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_3
      fillColor = $[0,0,1]
      opacity [set every frame] = $curOpacity3
      shape = star
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent displayPicture
      image [set every frame] = $curImage
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor [set every frame] = $[1,1,1]
      lineWidth = 0
      opacity [set every frame] = $curOpacity2
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine response1
    PolygonComponent polygon_4
      fillColor = $[1,0,0]
      shape = triangle
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        flipper = False
        #if random.random()>.5:
        #    flipper = True
        trials.addData('flipper', flipper)

        options = [folder + curSet[T1_loc-1], folder + curSet[15], folder + curSet[T2_loc-1], folder + curSet[16]]
        shuffle(options)
        opt1 = options[0]
        opt2 = options[1]
        opt3 = options[2]
        opt4 = options[3]
        trials.addData('opt1_t1', opt1)
        trials.addData('opt2_t1', opt2)
        trials.addData('opt3_t1', opt3)
        trials.addData('opt4_t1', opt4)
    ImageComponent option4_t1
      image [set every repeat] = $opt4
      pos = (0, -.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option1_t1
      image [set every repeat] = $opt1
      pos = (-.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option2_t1
      image [set every repeat] = $opt2
      pos = (0, .30)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option3_t1
      image [set every repeat] = $opt3
      pos = (.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'left','right', 'down', 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response2
    PolygonComponent polygon_5
      fillColor = $[0,0,1]
      shape = star
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        options = [folder + curSet[T1_loc-1], folder + curSet[15], folder + curSet[T2_loc-1], folder + curSet[16]]
        shuffle(options)
        opt1 = options[0]
        opt2 = options[1]
        opt3 = options[2]
        opt4 = options[3]
        trials.addData('opt1_t1', opt1)
        trials.addData('opt2_t1', opt2)
        trials.addData('opt3_t1', opt3)
        trials.addData('opt4_t1', opt4)
    ImageComponent option1_t2
      image [set every repeat] = $opt1
      pos = (-0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option2_t2
      image [set every repeat] = $opt2
      pos = (0, .3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option3_t2
      image [set every repeat] = $opt3
      pos = (.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option4_t2
      image [set every repeat] = $opt4
      pos = (0, -.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right', 'up', 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_2
    VariableComponent breakText
      startExpValue = ""
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    VariableComponent breakTime
      startExpValue = .1
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        try:
            cur = [40,80,120].index(trials.thisTrialN)
            breakTime = 10000
            if cur==0:
                breakText = "Take a break! you are 25% of the way through. Press SPACEBAR when you're ready to continue."
            elif cur==1:
                breakText = "Take a break! you are 50% of the way through. Press SPACEBAR when you're ready to continue."
            else:
                breakText = "Take a break! you are 75% of the way through. Press SPACEBAR when you're ready to continue."
        except:
            breakTime = .01
            breakText = ""
      Each Frame:
        if breakTime<1:
            continueRoutine = False
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $breakTime
      text [set every repeat] = $breakText
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditionAB.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trialType', 'AB'), ('cndTyp', 'prime'), ('lag', 4), ('T1_loc', 3), ('gap', 0.0), ('T2_loc', 7), ('primePos', 5), ('stimLen', 2), ('isi', 0.04)]),
      OrderedDict([('trialType', 'AB'), ('cndTyp', 'gap90'), ('lag', 2), ('T1_loc', 4), ('gap', 0.09), ('T2_loc', 6), ('primePos', 103), ('stimLen', 2), ('isi', 0.04)]),
      OrderedDict([('trialType', 'AB'), ('cndTyp', 'lag3'), ('lag', 3), ('T1_loc', 3), ('gap', 0.0), ('T2_loc', 6), ('primePos', 102), ('stimLen', 2), ('isi', 0.04)]),
      OrderedDict([('trialType', 'AB'), ('cndTyp', 'lag5'), ('lag', 5), ('T1_loc', 3), ('gap', 0.0), ('T2_loc', 8), ('primePos', 102), ('stimLen', 2), ('isi', 0.04)]),
      OrderedDict([('trialType', 'AB'), ('cndTyp', 'T2absent'), ('lag', 99), ('T1_loc', 3), ('gap', 0.0), ('T2_loc', 102), ('primePos', 102), ('stimLen', 2), ('isi', 0.04)]),
      OrderedDict([('trialType', 'AB'), ('cndTyp', 'lag4'), ('lag', 4), ('T1_loc', 3), ('gap', 0.0), ('T2_loc', 7), ('primePos', 102), ('stimLen', 2), ('isi', 0.04)]),
      OrderedDict([('trialType', 'AB'), ('cndTyp', 'lag4'), ('lag', 4), ('T1_loc', 3), ('gap', 0.0), ('T2_loc', 7), ('primePos', 102), ('stimLen', 2), ('isi', 0.04)]),
      OrderedDict([('trialType', 'AB'), ('cndTyp', 'T2absent'), ('lag', 99), ('T1_loc', 4), ('gap', 0.0), ('T2_loc', 103), ('primePos', 103), ('stimLen', 2), ('isi', 0.04)]),
      OrderedDict([('trialType', 'AB'), ('cndTyp', 'gap30'), ('lag', 2), ('T1_loc', 3), ('gap', 0.03), ('T2_loc', 5), ('primePos', 102), ('stimLen', 2), ('isi', 0.04)])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
    Routine trial
    Routine response1
    Routine response2
    Routine break_2
  LoopTerminator trials
